usegui = 1

{load_file("stdlib.hoc")}
{load_file("stdgui.hoc")}


create Soma
access Soma
{ L = diam = 23.1453}
celsius = 37


forall Ra = 82
forall cm = 2.23041

insert pas
{ g_pas= 4.85726e-05 }
{ e_pas= -80.3987 }

insert cad
eca = 140
ion_style("ca_ion",0,1,0,0,0)

insert sca
{ gbar_sca = 0.45423528 } 

insert kca
{ gbar_kca = 6.15058501 }
{ ek = -80 }

proc initialiseValues0() {

    forall  v = -65

}

objref fih0
{fih0 = new FInitializeHandler(0, "initialiseValues0()")}

objref stim1

Soma {
    stim1 = new IClamp(0.5)
    stim1.del = 100.0
    stim1.dur = 500.0
    stim1.amp = 0.1
}

tstop = 700
dt = 0.01

objref v_time
objref f_time

v_time = new Vector()
{ v_time.record(&t) }
f_time = new File()

objref Soma_v
{ Soma_v = new Vector() }
{ Soma_v.record(&Soma.v(0.5))} 

objref Soma_ca
{ Soma_ca = new Vector() }
{ Soma_ca.record(&Soma.cai(0.5))} 

objref Soma_cao
{ Soma_cao = new Vector() }
{ Soma_cao.record(&Soma.cao(0.5))} 

objref Soma_ica
{ Soma_ica = new Vector() }
{ Soma_ica.record(&Soma.ica(0.5))} 

objref f_Soma_v

objref GraphWin_0
objref GraphWin_2
objref GraphWin_3
objref GraphWin_4
objref GraphWin_5

if (usegui==1) {

    GraphWin_0 = new Graph(0)
    {GraphWin_0.size(0, tstop,-110.0,80.0)}
    {GraphWin_0.view(0, -110.0, tstop, 190.0, 80, 330, 330, 250)}
    {
        GraphWin_0.addexpr("Soma.v(0.5)", 1, 1, 0.8, 0.9, 2)
        graphList[0].append(GraphWin_0)
    }

    GraphWin_2 = new Graph(0)
    {GraphWin_2.size(0, tstop,-0.005,0.005)}
    {GraphWin_2.view(0, 0, tstop, 0.005, 80, 330, 330, 250)}
    {
        GraphWin_2.addexpr("cai", "cai", 1, 1, 0.8, 0.9, 2)
        graphList[0].append(GraphWin_2)
    }

    // GraphWin_3 = new Graph(0)
    // {GraphWin_3.size(0, tstop,-100,100)}
    // {GraphWin_3.view(0, 70, tstop, 60, 80, 330, 330, 250)}
    // {
    //     GraphWin_3.addexpr("eca", "eca", 1, 1, 0.8, 0.9, 2)
    //     graphList[0].append(GraphWin_3)
    // }

    GraphWin_4 = new Graph(0)
    {GraphWin_4.size(0, tstop,-0.005,0.0)}
    {GraphWin_4.view(0, 0, tstop, 0.005, 80, 330, 330, 250)}
    {
        GraphWin_4.addexpr("ica", "ica", 1, 1, 0.8, 0.9, 2)
        graphList[0].append(GraphWin_4)
    }

    GraphWin_5 = new Graph(0)
    {GraphWin_5.size(0, tstop,-0.1,1.1)}
    {GraphWin_5.view(0, -0.1, tstop, 1.2, 80, 330, 330, 250)}
    {
        GraphWin_5.addexpr("m_sca", "m_sca", 1, 1, 0.8, 0.9, 2)
        GraphWin_5.addexpr("h_sca", "h_sca", 2, 1, 0.8, 0.9, 2)
        graphList[0].append(GraphWin_5)
    }
}

{run()}


objref f_Soma_si
f_Soma_si = new File()
{ f_Soma_si.wopen("Soma_ca.si.dat") }
for i=0, Soma_v.size()-1 {
   f_Soma_si.printf("%f\t%f\n", v_time.x[i]/1000, Soma_v.x[i]/1000)
}
{ f_Soma_si.close() }

objref f_cai
f_cai = new File()
{ f_cai.wopen("cai.dat") }
for i=0, Soma_ca.size()-1 {
   f_cai.printf("%f\t%f\n", v_time.x[i]/1000, Soma_ca.x[i])
}
{ f_cai.close() }

objref f_cao
f_cao = new File()
{ f_cao.wopen("cao.dat") }
for i=0, Soma_cao.size()-1 {
   f_cao.printf("%f\t%f\n", v_time.x[i]/1000, Soma_cao.x[i])
}
{ f_cao.close() }

objref f_ica
f_ica = new File()
{ f_ica.wopen("ica.dat") }
for i=0, Soma_ica.size()-1 {
   f_ica.printf("%f\t%f\n", v_time.x[i]/1000, Soma_ica.x[i])
}
{ f_ica.close() }

if (usegui==1) {
    //   This code pops up a simple Run Control

    {
    xpanel("RunControl", 0)
    v_init = -60.0
    xbutton("Init & Run","run()")
    xbutton("Stop","stoprun=1")
    t = 0
    xvalue("t","t", 2 )
    xvalue("Tstop","tstop", 1,"tstop_changed()", 0, 1 )
     xvalue("dt","dt", 1,"setdt()", 0, 1 )
    xpanel(80,80)
    }
}

forall psection()