usegui = 1

{load_file("stdlib.hoc")}
{load_file("stdgui.hoc")}


create Soma
access Soma
{ L = diam = 23.1453}
celsius = 37

// Soma {pt3dclear() pt3dadd(0.0, 0.0, 0.0, 23.138652)}
// Soma L=23 diam=23
// define_shape()


forall Ra = 82
forall cm = 2.23041

insert pas
{ g_pas= 4.85726e-05 }
{ e_pas= -80.3987 }


insert nat
{ gbar_nat=236.616175 }
{ ena = 55 }
// { vshift_nat = 10 }

insert kfast
{ gbar_kfast=67.197508 }
{ ek = -80 }

insert kslow
{ gbar_kslow=475.820646 }
{ ek = -80 }

insert nap
{ gbar_nap=1.443953 }
{ ena = 55 }

insert km
{ gbar_km=10.459916 }
{ ek = -80 }

proc initialiseValues0() {

    forall  v = -65

}

objref fih0
{fih0 = new FInitializeHandler(0, "initialiseValues0()")}

objref stim1

Soma {
    stim1 = new IClamp(0.5)
    stim1.del = 100.0
    stim1.dur = 500.0
    stim1.amp = 0.4
}

tstop = 700
dt = 0.01

objref v_time
objref f_time

v_time = new Vector()
{ v_time.record(&t) }
f_time = new File()

objref Soma_v
{ Soma_v = new Vector() }
{ Soma_v.record(&Soma.v(0.5))}

objref f_Soma_v

objref GraphWin_0
objref GraphWin_1
objref GraphWin_2
objref GraphWin_3
objref GraphWin_4
objref GraphWin_5

if (usegui==1) {

    GraphWin_0 = new Graph(0)
    {GraphWin_0.size(0, tstop,-110.0,80.0)}
    {GraphWin_0.view(0, -110.0, tstop, 190.0, 80, 330, 330, 250)}
    {
        GraphWin_0.addexpr("Soma.v(0.5)", 1, 1, 0.8, 0.9, 2)
        graphList[0].append(GraphWin_0)
    }

    GraphWin_1 = new Graph(0)
    {GraphWin_1.size(0, tstop,-0.1,1.1)}
    {GraphWin_1.view(0, -0.1, tstop, 1.2, 80, 330, 330, 250)}
    {
        GraphWin_1.addexpr("m_nat", "m_nat", 1, 1, 0.8, 0.9, 2)
        GraphWin_1.addexpr("h_nat", "h_nat", 2, 1, 0.8, 0.9, 2)
        graphList[0].append(GraphWin_1)
    }

    GraphWin_2 = new Graph(0)
    {GraphWin_2.size(0, tstop,-0.1,1.1)}
    {GraphWin_2.view(0, -0.1, tstop, 1.2, 80, 330, 330, 250)}
    {
        GraphWin_2.addexpr("n_kfast", "n_kfast", 1, 1, 0.8, 0.9, 2)
        graphList[0].append(GraphWin_2)
    }

    GraphWin_3 = new Graph(0)
    {GraphWin_3.size(0, tstop,-0.1,1.1)}
    {GraphWin_3.view(0, -0.1, tstop, 1.2, 80, 330, 330, 250)}
    {
        GraphWin_3.addexpr("m_nap", "m_nap", 1, 1, 0.8, 0.9, 2)
        graphList[0].append(GraphWin_3)
    }

    GraphWin_4 = new Graph(0)
    {GraphWin_4.size(0, tstop,-0.1,1.1)}
    {GraphWin_4.view(0, -0.1, tstop, 1.2, 80, 330, 330, 250)}
    {
        GraphWin_4.addexpr("a_kslow", "a_kslow", 1, 1, 0.8, 0.9, 2)
        GraphWin_4.addexpr("b_kslow", "b_kslow", 2, 1, 0.8, 0.9, 2)
        graphList[0].append(GraphWin_4)
    }

    GraphWin_5 = new Graph(0)
    {GraphWin_5.size(0, tstop,-0.1,1.1)}
    {GraphWin_5.view(0, -0.1, tstop, 1.2, 80, 330, 330, 250)}
    {
        GraphWin_5.addexpr("m_km", "m_km", 1, 1, 0.8, 0.9, 2)
        graphList[0].append(GraphWin_5)
    }
}

{run()}

strdef timeFilename


f_Soma_v = new File()
strdef filename
{sprint(filename, "Soma.dat")}
f_Soma_v.wopen(filename)
Soma_v.printf(f_Soma_v)
f_Soma_v.close()

{ sprint(timeFilename, "%s",  "time.dat")}
{ f_time.wopen(timeFilename) }
{ v_time.printf(f_time) }
{ f_time.close() }

objref f_Soma_si
f_Soma_si = new File()
{ f_Soma_si.wopen("Soma.si.dat") }
for i=0, Soma_v.size()-1 {
   f_Soma_si.printf("%f\t%f\n", v_time.x[i]/1000, Soma_v.x[i]/1000)
}
{ f_Soma_si.close() }

if (usegui==1) {
    //   This code pops up a simple Run Control
    {
    xpanel("RunControl", 0)
    v_init = -90.0
    xbutton("Init & Run","run()")
    xbutton("Stop","stoprun=1")
    t = 0
    xvalue("t","t", 2 )
    tstop = 800.0
    xvalue("Tstop","tstop", 1,"tstop_changed()", 0, 1 )
    dt = 0.01
    xvalue("dt","dt", 1,"setdt()", 0, 1 )
    xpanel(80,80)
    }
}
// load_file("../regular_spiking.ses")

forall psection()
