load_file("../init_models_with_ca/init_model2.hoc")

usegui = 1

define_shape()

load_file("nrngui.hoc")

celsius = 37



objref stim1 
soma {
    stim1 = new IClamp(0.5)
    stim1.del = 100.0
    stim1.dur = 500.0
    stim1.amp = 0.4
    
}


tstop = 800.0
dt = 0.025

objref GraphWin_0
objref GraphWin_1
objref GraphWin_2
objref GraphWin_3
objref GraphWin_4

if (usegui==1) {
     GraphWin_0 = new Graph(0)
    {GraphWin_0.size(0, tstop,-110.0,50.0)}
    {GraphWin_0.view(0, -110.0, tstop, 160.0, 80, 330, 330, 250)}
    {
        GraphWin_0.addexpr("soma.v", "soma.v(0.5)", 1, 1, 0.8, 0.9, 2)
      //   GraphWin_0.addexpr("apical.v", "apical.v(0.5)", 2, 1, 0.8, 0.9, 2)
      //   GraphWin_0.addexpr("tuft.v", "tuft.v(0.5)", 3, 1, 0.8, 0.9, 2)
        graphList[0].append(GraphWin_0)
    }
}

strdef timeFilename

objref v_time
objref f_time

v_time = new Vector()
{ v_time.record(&t) }
f_time = new File()

objref Soma_v
{ Soma_v = new Vector() }
{ Soma_v.record(&soma.v(0.5))} 

// objref Apical_v
// { Apical_v = new Vector() }
// { Apical_v.record(&apical.v(0.5))} 

// objref Tuft_v
// { Tuft_v = new Vector() }
// { Tuft_v.record(&tuft.v(0.5))} 


{run()}

// strdef timeFilename


// objref f_Soma_v
// f_Soma_v = new File()
// strdef filename
// {sprint(filename, "soma.v.dat")}
// f_Soma_v.wopen(filename)
// Soma_v.printf(f_Soma_v)
// f_Soma_v.close()

// { sprint(timeFilename, "%s",  "time.dat")}
// { f_time.wopen(timeFilename) }
// { v_time.printf(f_time) }
// { f_time.close() }

// objref f_Soma_si
// f_Soma_si = new File()
// { f_Soma_si.wopen("Soma.si.dat") }
// for i=0, Soma_v.size()-1 {
//    f_Soma_si.printf("%f\t%f\n", v_time.x[i]/1000, Soma_v.x[i]/1000)
// }
// { f_Soma_si.close() }

// objref f_Apical_v
// f_Apical_v = new File()
// strdef filename
// {sprint(filename, "apical.v.dat")}
// f_Apical_v.wopen(filename)
// Apical_v.printf(f_Apical_v)
// f_Apical_v.close()

// objref f_Apical_si
// f_Apical_si = new File()
// { f_Apical_si.wopen("Apical.si.dat") }
// for i=0, Apical_v.size()-1 {
//    f_Apical_si.printf("%f\t%f\n", v_time.x[i]/1000, Apical_v.x[i]/1000)
// }
// { f_Apical_si.close() }

// objref f_Tuft_v
// f_Tuft_v = new File()
// strdef filename
// {sprint(filename, "tuft.v.dat")}
// f_Tuft_v.wopen(filename)
// Tuft_v.printf(f_Tuft_v)
// f_Tuft_v.close()

// objref f_Tuft_si
// f_Tuft_si = new File()
// { f_Tuft_si.wopen("Tuft.si.dat") }
// for i=0, Tuft_v.size()-1 {
//    f_Tuft_si.printf("%f\t%f\n", v_time.x[i]/1000, Tuft_v.x[i]/1000)
// }
// { f_Tuft_si.close() }

forall psection()