load_file("../init_models_with_ca/init_model2.hoc")

usegui = 1

define_shape()

load_file("nrngui.hoc")

celsius = 37



objref stim1 
soma {
    stim1 = new IClamp(0.5)
    stim1.del = 100.0
    stim1.dur = 500.0
    stim1.amp = 0.4
    
}


tstop = 800.0
dt = 0.025

objref GraphWin_0
objref GraphWin_1
objref GraphWin_2
objref GraphWin_3
objref GraphWin_4

if (usegui==1) {
     GraphWin_0 = new Graph(0)
    {GraphWin_0.size(0, tstop,-110.0,50.0)}
    {GraphWin_0.view(0, -110.0, tstop, 160.0, 80, 330, 330, 250)}
    {
        GraphWin_0.addexpr("soma.v", "soma.v(0.5)", 1, 1, 0.8, 0.9, 2)
        graphList[0].append(GraphWin_0)
    }
}

objref v_time
objref f_time

v_time = new Vector()
{ v_time.record(&t) }
f_time = new File()


objref Soma_v
{ Soma_v = new Vector() }
{ Soma_v.record(&soma.v(0.5))} 


{run()}

strdef timeFilename


objref f_Soma_v
f_Soma_v = new File()
strdef filename
{sprint(filename, "soma.v.dat")}
f_Soma_v.wopen(filename)
Soma_v.printf(f_Soma_v)
f_Soma_v.close()